PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = wholereport
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      pos = (windowSize * 2/3, windowSize * 2/3)
      shape = triangle
      size = 0.15, 0.3
      startVal [time (s)] = 0.0
      vertices = 4
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    PolygonComponent polygon_2
      fillColor = white
      pos = (0, 2/3)
      shape = triangle
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent polygon_3
      fillColor = white
      pos = (-2/3, 2/3)
      shape = triangle
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        thisExp.addData('windowSize', win.size)
Flow
  Routine trial
